PsychoPy2experiment version="1.83.04"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], "Pixel Explicit", expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1920, 1200]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = Pixels points practice
  Save excel file = True
  Units = use prefs
  Screen = 1
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Routines
  Routine Pause
    TextComponent text_2
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine end
    TextComponent text_5
      text = End of practice
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine feedback
    ImageComponent image
      stopVal [duration (s)] = 1.0
      pos = [-0.1, 0.1]
      startVal [time (s)] = 0.0
      image [set every repeat] = $image_correct
      size = [0.25, 0.25]
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    TextComponent text_9
      color [set every repeat] = $feedback_colour
      text [set every repeat] = $score_feedback
      stopVal [duration (s)] = 1.0
      pos = [-0.1, -0.1]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_3
      End Routine:
        thisExp.addData('Score2',Score2)
      End Experiment:
        thisExp.saveAsWideText(thisExp.dataFileName+'.csv', delim= ',')
  Routine explicit
    TextComponent text_6
      color = $[-1.000,-1.000,-1.000]
      text = Are you confident ?
      stopVal [duration (s)] = 3
      pos = [0, 0.3]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    PolygonComponent polygon_6
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 3
      pos = [-0.2, -0.2]
      startVal [time (s)] = 0.0
      size = [0.25, 0.25]
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    PolygonComponent polygon_7
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 3
      pos = [0.2, -0.2]
      startVal [time (s)] = 0.0
      size = [0.25, 0.25]
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    TextComponent text_7
      color = $[-1.000,-1.000,-1.000]
      text = Yes
      stopVal [duration (s)] = 3
      pos = [-0.2, -0.2]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_8
      color = $[-1.000,-1.000,-1.000]
      text = No
      stopVal [duration (s)] = 3
      pos = [0.2, -0.2]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    MouseComponent mouse_3
      timeRelativeTo = routine
      stopVal [duration (s)] = 3
      forceEndRoutineOnPress = False
      startVal [time (s)] = 0.0
      saveMouseState = final
    CodeComponent code_2
      Begin Experiment:
        MetacognitiveChoice= ""
        MetacognitieAccuuracy=""
        score_feedback= ""
        feedback_colour= [1,1,1]
        MetaforGamma=999

        numYes=0
        numNo=0
        DiffYes=[]
        DiffNo=[]
        clickTime2= 9999
      Begin Routine:
        MetacognitiveChoice= ""
        MetacognitieAccuuracy=""
        score_feedback= ""
        MetaforGamma=999
      End Routine:
        if mouse.isPressedIn(polygon_6):
                    MetacognitiveChoice= "Correct"
                    MetaforGamma=1
                    numYes=numYes+1
                    DiffYes.append(DIFFERENCE2)

        elif mouse.isPressedIn(polygon_7):
                    MetacognitiveChoice= "Incorrect"
                    MetaforGamma=0
                    numNo=numNo+1
                    DiffNo.append(DIFFERENCE2)

        else:
                    MetacognitiveChoice= "Missed"
                    Score=Score-30
                    score_feedback= "-30"
                    feedback_colour= [1,-1,-1]
                    image_correct= "incorrect.png"

        if MetacognitiveChoice== "Correct" and trial_performance== "Correct":
                    MetacognitieAccuuracy= "Accurate"
                    Score=Score+30
                    score_feedback= "+30"
                    feedback_colour= [-1,1,-1]

        if MetacognitiveChoice== "Incorrect" and trial_performance== "Incorrect":
                    MetacognitieAccuuracy= "Accurate"
                    Score=Score-10
                    score_feedback= "-10"
                    feedback_colour= [1,-1,-1]

        if MetacognitiveChoice== "Correct" and trial_performance== "Incorrect":
                    MetacognitieAccuuracy= "Inaccurate"
                    Score=Score-30
                    score_feedback= "-30"
                    feedback_colour= [1,-1,-1]

        if MetacognitiveChoice== "Incorrect" and trial_performance== "Correct":
                    MetacognitieAccuuracy= "Inaccurate"
                    Score=Score+10
                    score_feedback= "+10"
                    feedback_colour= [-1,1,-1]

        #DecimalScore= '{0:.2f}'.format(Score)
        Score2= Score1 + str(Score)
        RT2= clickTime2-endTrialTime


        thisExp.addData('MetacognitiveChoice',MetacognitiveChoice)
        thisExp.addData('MetacognitieAccuuracy',MetacognitieAccuuracy)
        thisExp.addData('ObjectforGamma',ObjectforGamma)
        thisExp.addData('MetaforGamma',MetaforGamma)
        thisExp.addData('numYes',numYes)
        thisExp.addData('numNo',numNo)
        thisExp.addData('DiffYes',DiffYes)
        thisExp.addData('DiffNo',DiffNo)
        thisExp.addData('RT2',RT2)
      Each Frame:
        if mouse.isPressedIn(polygon_6):
                    continueRoutine=False
                    clickTime2= trialClock.getTime()

        elif mouse.isPressedIn(polygon_7):
                    continueRoutine=False
                    clickTime2= trialClock.getTime()
  Routine trial
    CodeComponent code
      Begin Experiment:
        ONE=100
        TWO=100

        from psychopy.visual import GratingStim
        import numpy as np

        myTex = np.random.random( (ONE,ONE,4) )

        myTex2 = np.random.random( (TWO,TWO,4) )

        num_correct_discriminations= 0
        num_incorrect_discriminations= 0
        prop_correct_discriminations=0
        prop_incorrect_discriminations=0
        num_missed_discriminations= 0
        prop_missed_discriminations=0
        trial_total= 0
        trial_performance= ""
        ObjectforGamma=999

        Score=  50
        Score1= 'Points:  '
        #Score3= u"\u00A3"
        #DecimalScore= '{0:.2f}'.format(Score)
        Score2= Score1 +str(Score)
        image_correct= ""

        SCORE= ""
        colour_feedback=""
        clickTime= 9999
        clickTime2= 9999

        runorskip=0
        clicked=0
      Begin Routine:
        myTex = np.random.random( (ONE,ONE,4) )

        myTex2 = np.random.random( (TWO,TWO,4) )


        colour1= colour_initial
        colour2= colour_initial

        clickTime= 9999
        box_selected= ("")

        runorskip=0
        clicked=0
        ObjectforGamma=999
      End Routine:
        if box_selected== correct:
            trial_performance= "Correct"
            ObjectforGamma=1
            num_correct_discriminations= num_correct_discriminations+1
            trial_total= trial_total+1
            image_correct= "correct.png"
            runorskip=1

        if box_selected!= correct and clicked==0:
            trial_performance= "Missed"
            num_missed_discriminations= num_missed_discriminations+1
            trial_total= trial_total+1
            image_correct= "incorrect.png"
            Score=Score-30
            score_feedback= "-30"
            feedback_colour= [1,-1,-1]

        if box_selected!= correct and clicked==1:
            trial_performance= "Incorrect"
            ObjectforGamma=0
            num_incorrect_discriminations= num_incorrect_discriminations +1
            trial_total= trial_total+1
            image_correct= "incorrect.png"
            runorskip=1


        #DecimalScore= '{0:.2f}'.format(Score)
        Score2= Score1 + str(Score)
        RT= clickTime - 1


        prop_correct_discriminations= num_correct_discriminations/trial_total
        prop_incorrect_discriminations= num_incorrect_discriminations/trial_total

        thisExp.addData('box_selected',box_selected)
        thisExp.addData('trial_total',trial_total)
        thisExp.addData('trial_performance',trial_performance)
        thisExp.addData('num_correct_discriminations',num_correct_discriminations)
        thisExp.addData('num_incorrect_discriminations',num_incorrect_discriminations)
        thisExp.addData('num_missed_discriminations',num_missed_discriminations)
        thisExp.addData('prop_correct_discriminations',prop_correct_discriminations)
        thisExp.addData('prop_incorrect_discriminations',prop_incorrect_discriminations)
        thisExp.addData('RT',RT)
      Each Frame:
        t2=int(t)
        t3=4-t2

        if mouse.isPressedIn(grating):
                    colour1= colour_selected
                    box_selected= "ONE"
                    clickTime= trialClock.getTime()
                    mouse.time.append(trialClock.getTime())
                    endTrialTime= mouse.time[0]+1.5
                    clicked=1

        if mouse.isPressedIn(grating_2):
                    box_selected= "TWO"
                    colour2= colour_selected
                    clickTime= trialClock.getTime()
                    mouse.time.append(trialClock.getTime())
                    endTrialTime= mouse.time[0]+1.5
                    clicked=1

        timer=clickTime+1.5

        if t > timer:
            continueRoutine= False
    TextComponent text_3
      color = $[-1.000,-1.000,1.000]
      text [set every repeat] =  $Score2
      stopVal [duration (s)] = 3
      pos = [0.80, -0.9]
      startVal [time (s)] = 1
      letterHeight = 0.10
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    MouseComponent mouse
      timeRelativeTo = routine
      stopVal [duration (s)] = 3
      forceEndRoutineOnPress = False
      startVal [time (s)] = 1
      saveMouseState = on click
    GratingComponent grating
      tex [set every repeat] = $myTex
      stopVal [duration (s)] = 3
      pos = [-0.3, 0]
      interpolate = nearest
      texture resolution = 256
      phase = 1
      startVal [time (s)] = 1
      sf = None
      size = [0.3, 0.3]
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    GratingComponent grating_2
      tex [set every repeat] = $myTex2
      stopVal [duration (s)] = 3
      pos = [0.3, 0]
      interpolate = nearest
      texture resolution = 256
      phase = 1
      startVal [time (s)] = 1
      sf = None
      size = [0.3, 0.3]
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    TextComponent text_4
      color = $[-1.000,-1.000,-1.000]
      text [set every frame] = $t3
      stopVal [duration (s)] = 3
      pos = [0.9, 0.9]
      startVal [time (s)] = 1
      letterHeight = 0.05
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    PolygonComponent polygon_9
      stopVal [duration (s)] = 3
      pos = [-0.3, 0]
      lineWidth = 4
      lineColor [set every frame] = $colour1
      startVal [time (s)] = 1
      size = [0.5, 0.5]
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    PolygonComponent polygon_10
      stopVal [duration (s)] = 3
      pos = [0.3, 0]
      lineWidth = 4
      lineColor [set every frame] = $colour2
      startVal [time (s)] = 1
      size = [0.5, 0.5]
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  Routine Intro
    TextComponent text
      text = Please click the mouse to begin....
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    MouseComponent mouse_2
      timeRelativeTo = routine
      forceEndRoutineOnPress = True
      startVal [time (s)] = 0.0
      saveMouseState = final
  Routine routine_1
Flow
  Routine Intro
  Routine Pause
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = PixelParameters_Practisexlsx.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'colour_initial': [0, 0, 0], u'colour_selected': [0, 170, 0], u'DIFFERENCE2': 0.19, u'TWO': 81, u'ONE': 100, u'DIFFERENCE': 19, u'correct': u'ONE'},
      {u'colour_initial': [0, 0, 0], u'colour_selected': [0, 170, 0], u'DIFFERENCE2': 0.1597222222222222, u'TWO': 144, u'ONE': 121, u'DIFFERENCE': 23, u'correct': u'TWO'},
      {u'colour_initial': [0, 0, 0], u'colour_selected': [0, 170, 0], u'DIFFERENCE2': 0.19, u'TWO': 400, u'ONE': 324, u'DIFFERENCE': 76, u'correct': u'TWO'},
      {u'colour_initial': [0, 0, 0], u'colour_selected': [0, 170, 0], u'DIFFERENCE2': 0.08506616257088846, u'TWO': 529, u'ONE': 484, u'DIFFERENCE': 45, u'correct': u'TWO'},
      {u'colour_initial': [0, 0, 0], u'colour_selected': [0, 170, 0], u'DIFFERENCE2': 0.19, u'TWO': 100, u'ONE': 81, u'DIFFERENCE': 19, u'correct': u'TWO'},
      {u'colour_initial': [0, 0, 0], u'colour_selected': [0, 170, 0], u'DIFFERENCE2': 0.10802469135802469, u'TWO': 324, u'ONE': 289, u'DIFFERENCE': 35, u'correct': u'TWO'},
      {u'colour_initial': [0, 0, 0], u'colour_selected': [0, 170, 0], u'DIFFERENCE2': 0.1597222222222222, u'TWO': 121, u'ONE': 144, u'DIFFERENCE': 23, u'correct': u'ONE'},
      {u'colour_initial': [0, 0, 0], u'colour_selected': [0, 170, 0], u'DIFFERENCE2': 0.10802469135802469, u'TWO': 289, u'ONE': 324, u'DIFFERENCE': 35, u'correct': u'ONE'},
      {u'colour_initial': [0, 0, 0], u'colour_selected': [0, 170, 0], u'DIFFERENCE2': 0.08506616257088846, u'TWO': 484, u'ONE': 529, u'DIFFERENCE': 45, u'correct': u'ONE'}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
    Routine trial
    LoopInitiator trials_2 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = $runorskip
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      Routine explicit
    LoopTerminator trials_2
    Routine feedback
  LoopTerminator trials
  Routine end
