PsychoPy2experiment version="1.83.04"
Settings
  Show mouse = True
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], "Colour Implicit", expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1920, 1200]
  Full-screen window = True
  Experiment info = {u'Session': u'1', u'participant': u''}
  expName = Colour I points
  Units = use prefs
  Screen = 1
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Routines
  Routine Pause
    TextComponent text_8
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine end
    TextComponent text_3
      text = End of task
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine feedback
    ImageComponent image
      stopVal [duration (s)] = 1
      pos = [-0.1, 0.1]
      startVal [time (s)] = 0.0
      image [set every repeat] = $image_correct
      size = [0.25, 0.25]
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    TextComponent text_7
      color [set every repeat] = $feedback_colour
      text [set every repeat] = $score_feedback
      stopVal [duration (s)] = 1
      pos = [-0.1, -0.1]
      startVal [time (s)] = 0.0
      letterHeight = 0.10
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    CodeComponent code_3
  Routine sound_file
    SoundComponent sound_1
      sound = sounds\List1.wav
      stopVal [duration (s)] = 10
      startVal [time (s)] = 0.0
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  Routine explicit
    PolygonComponent polygon_7
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 3
      pos = [-0.3, 0]
      lineColor = $[-1,-1,-1]
      startVal [time (s)] = 0.0
      nVertices = 3
      size = [0.25, 0.25]
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    PolygonComponent polygon_8
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 3
      pos = [0.3, 0]
      lineColor = $[-1,-1,-1]
      startVal [time (s)] = 0.0
      nVertices = 100
      size = [0.25, 0.25]
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    MouseComponent mouse_4
      timeRelativeTo = routine
      stopVal [duration (s)] = 3
      forceEndRoutineOnPress = False
      startVal [time (s)] = 0.0
      saveMouseState = final
    CodeComponent code_2
      Begin Experiment:
        MetacognitiveChoice= ""
        score_feedback= ""
        feedback_colour= [1,1,1]
        MetaforGamma=999

        numA=0
        numB=0
        numC=0
        numD=0
        numHighRisk=0
        numLowRisk=0
        DiffHighRisk=[]
        DiffLowRisk=[]
        clickTime2= 9999
      Begin Routine:
        MetacognitiveChoice= ""
        score_feedback= ""
        MetaforGamma=999
      End Routine:
        if mouse.isPressedIn(polygon_7):
                    MetacognitiveChoice= "HighRisk"
                    MetaforGamma=1
                    numHighRisk=numHighRisk+1
                    DiffHighRisk.append(DIFFERENCE)

        elif mouse.isPressedIn(polygon_8):
                    MetacognitiveChoice= "LowRisk"
                    MetaforGamma=0
                    numLowRisk=numLowRisk+1
                    DiffLowRisk.append(DIFFERENCE)

        else:
                    MetacognitiveChoice= "Missed"
                    Score=Score-30
                    score_feedback= "-30"
                    feedback_colour= [1,-1,-1]
                    image_correct= "incorrect.png"

        if MetacognitiveChoice== "HighRisk" and trial_performance== "Correct":
                    Score=Score+30
                    numA=numA+1
                    score_feedback= "+30"
                    feedback_colour= [-1,1,-1]

        if MetacognitiveChoice== "LowRisk" and trial_performance== "Incorrect":
                    Score=Score-10
                    numD=numD+1
                    score_feedback= "-10"
                    feedback_colour= [1,-1,-1]

        if MetacognitiveChoice== "HighRisk" and trial_performance== "Incorrect":
                    Score=Score-30
                    numB=numB+1
                    score_feedback= "-30"
                    feedback_colour= [1,-1,-1]

        if MetacognitiveChoice== "LowRisk" and trial_performance== "Correct":
                    MetacognitieAccuuracy= "Inaccurate"
                    numC=numC+1
                    Score=Score+10
                    score_feedback= "+10"
                    feedback_colour= [-1,1,-1]

        #DecimalScore= '{0:.2f}'.format(Score)
        Score2= Score1 + str(Score)
        RT2= clickTime2-endTrialTime

        thisExp.addData('MetacognitiveChoice',MetacognitiveChoice)
        thisExp.addData('ObjectLevelForGamma',ObjectLevelForGamma)
        thisExp.addData('MetaforGamma',MetaforGamma)
        thisExp.addData('numHighRisk',numHighRisk)
        thisExp.addData('numLowRisk',numLowRisk)
        thisExp.addData('DiffHighRisk',DiffHighRisk)
        thisExp.addData('DiffLowRisk',DiffLowRisk)
        thisExp.addData('Score',Score)
        thisExp.addData('Score2',Score2)
        thisExp.addData('numA',numA)
        thisExp.addData('numB',numB)
        thisExp.addData('numC',numC)
        thisExp.addData('numD',numD)
        thisExp.addData('RT2',RT2)
      Each Frame:
        if mouse.isPressedIn(polygon_7):
                    continueRoutine=False
                    clickTime2= trialClock.getTime()

        elif mouse.isPressedIn(polygon_8):
                    continueRoutine=False
                    clickTime2= trialClock.getTime()
  Routine Inr
    TextComponent text_5
      text = Please click the mouse to begin.... 
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    MouseComponent mouse_2
      timeRelativeTo = routine
      forceEndRoutineOnPress = True
      startVal [time (s)] = 0.0
      saveMouseState = final
  Routine trial
    CodeComponent code
      Begin Experiment:
        num_correct_discriminations= 0
        num_incorrect_discriminations= 0
        num_missed_discriminations= 0

        trial_total= 0
        trial_performance= ""
        ObjectLevelForGamma=999

        Score=  50
        Score1= 'Points:  '
        #Score3= u"\u00A3"
        #DecimalScore= '{0:.2f}'.format(Score)
        Score2= Score1 +str(Score)

        t=0
        t2=int(t)
        t3=4-t2

        SCORE= ""
        colour_feedback=""
        clickTime= 9999
        clickTime2= 9999

        runorskip=0
        clicked=0
      Begin Routine:
        colour1= colour_initial
        colour2= colour_initial

        clickTime= 9999
        box_selected= ("")

        runorskip=0
        clicked=0
        ObjectLevelForGamma=999
      End Routine:
        if box_selected== correct:
            trial_performance= "Correct"
            ObjectLevelForGamma=1
            num_correct_discriminations= num_correct_discriminations+1
            trial_total= trial_total+1
            image_correct= "correct.png"
            runorskip=1

        if box_selected!= correct and clicked==0:
            trial_performance= "Missed"
            num_missed_discriminations= num_missed_discriminations+1
            trial_total= trial_total+1
            image_correct= "incorrect.png"
            Score=Score-30
            score_feedback= "-30"
            feedback_colour= [1,-1,-1]

        if box_selected!= correct and clicked==1:
            trial_performance= "Incorrect"
            ObjectLevelForGamma=0
            num_incorrect_discriminations= num_incorrect_discriminations +1
            trial_total= trial_total+1
            image_correct= "incorrect.png"
            runorskip=1


        #DecimalScore= '{0:.2f}'.format(Score)
        Score2= Score1 + str(Score)
        RT= clickTime - 1

        thisExp.addData('box_selected',box_selected)
        thisExp.addData('trial_total',trial_total)
        thisExp.addData('trial_performance',trial_performance)
        thisExp.addData('num_correct_discriminations',num_correct_discriminations)
        thisExp.addData('num_incorrect_discriminations',num_incorrect_discriminations)
        thisExp.addData('num_missed_discriminations',num_missed_discriminations)
        thisExp.addData('RT',RT)
      Each Frame:
        t2=int(t)
        t3=4-t2

        if mouse.isPressedIn(square):
                    colour1= colour_selected
                    box_selected= "ONE"
                    mouse.time.append(trialClock.getTime())
                    endTrialTime= mouse.time[0]+1.5
                    clickTime= trialClock.getTime()
                    clicked=1

        if mouse.isPressedIn(square_2):
                    box_selected= "TWO"
                    colour2= colour_selected
                    mouse.time.append(trialClock.getTime())
                    endTrialTime= mouse.time[0]+1.5
                    clickTime= trialClock.getTime()
                    clicked=1

        timer=clickTime+1.5

        if t > timer:
            continueRoutine= False
    TextComponent text_2
      color = $[-1.000,-1.000,1.000]
      text [set every repeat] =  $Score2
      stopVal [duration (s)] = 3
      pos = [0.90, -0.9]
      startVal [time (s)] = 1
      letterHeight = 0.05
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    MouseComponent mouse
      timeRelativeTo = routine
      stopVal [duration (s)] = 3
      forceEndRoutineOnPress = False
      startVal [time (s)] = 1
      saveMouseState = on click
    PolygonComponent square
      stopVal [duration (s)] = 3
      pos = [-0.3, 0]
      lineWidth = 4
      lineColor [set every frame] = $colour1
      startVal [time (s)] = 1
      size = [0.5, 0.5]
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    PolygonComponent square_2
      stopVal [duration (s)] = 3
      pos = [0.3, 0]
      lineWidth = 4
      lineColor [set every frame] = $colour2
      startVal [time (s)] = 1
      size = [0.5, 0.5]
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    PolygonComponent line
      fillColor [set every repeat] = $[-1,-1,$ONE]
      stopVal [duration (s)] = 3
      pos = [-0.3, 0]
      startVal [time (s)] = 1
      size = [0.25, 0.25]
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    PolygonComponent line2
      fillColor [set every repeat] = $[-1,-1,$TWO]
      stopVal [duration (s)] = 3
      pos = [0.3, 0]
      startVal [time (s)] = 1
      size = [0.25, 0.25]
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  Routine BetweenTrials
    TextComponent text
      stopVal [duration (s)] = 0.75
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine Intro
    TextComponent text_6
      text = Please click the mouse to begin....
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    MouseComponent mouse_3
      timeRelativeTo = routine
      forceEndRoutineOnPress = True
      startVal [time (s)] = 0.0
      saveMouseState = final
Flow
  Routine Intro
  Routine Pause
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = BlueParameters_Dichotomous.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'diff2': 0.81374321880651, u'colour_initial': [0, 0, 0], u'colour_selected': [0, 170, 0], u'TWO': 0.10300000000000004, u'ONE': 0.553, u'DIFFERENCE': 0.45, u'correct': u'ONE'},
      {u'diff2': 0.5217391304347826, u'colour_initial': [0, 0, 0], u'colour_selected': [0, 170, 0], u'TWO': 0.253, u'ONE': 0.529, u'DIFFERENCE': 0.276, u'correct': u'ONE'},
      {u'diff2': 0.046474358974358816, u'colour_initial': [0, 0, 0], u'colour_selected': [0, 170, 0], u'TWO': 0.624, u'ONE': 0.5950000000000001, u'DIFFERENCE': 0.0289999999999999, u'correct': u'TWO'},
      {u'diff2': 0.0127209705372617, u'colour_initial': [0, 0, 0], u'colour_selected': [0, 170, 0], u'TWO': 0.5696599999999999, u'ONE': 0.577, u'DIFFERENCE': 0.00734, u'correct': u'ONE'},
      {u'diff2': 0.31418312387791736, u'colour_initial': [0, 0, 0], u'colour_selected': [0, 170, 0], u'TWO': 0.557, u'ONE': 0.38200000000000006, u'DIFFERENCE': 0.175, u'correct': u'TWO'},
      {u'diff2': 0.09206039076376556, u'colour_initial': [0, 0, 0], u'colour_selected': [0, 170, 0], u'TWO': 0.563, u'ONE': 0.5111699999999999, u'DIFFERENCE': 0.05183, u'correct': u'TWO'},
      {u'diff2': 0.07550077041602457, u'colour_initial': [0, 0, 0], u'colour_selected': [0, 170, 0], u'TWO': 0.649, u'ONE': 0.6000000000000001, u'DIFFERENCE': 0.048999999999999946, u'correct': u'TWO'},
      {u'diff2': 0.10117302052785924, u'colour_initial': [0, 0, 0], u'colour_selected': [0, 170, 0], u'TWO': 0.613, u'ONE': 0.682, u'DIFFERENCE': 0.069, u'correct': u'ONE'}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
    Routine trial
    LoopInitiator trials_2 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = $runorskip
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      Routine explicit
    LoopTerminator trials_2
    Routine feedback
  LoopTerminator trials
  Routine end
