PsychoPy2experiment version="1.83.04"
Settings
  Show mouse = True
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], "Colour Explicit", expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1366, 768]
  Full-screen window = True
  Experiment info = {u'Session': u'1', u'participant': u''}
  expName = G Task- Line version (2)
  Units = use prefs
  Screen = 1
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Routines
  Routine bridge
    TextComponent text_20
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine Pause
    TextComponent text_8
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine end
    TextComponent text_21
      text = End of practice
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine feedback
    ImageComponent image
      stopVal [duration (s)] = 1
      pos = [-0.1, 0.1]
      startVal [time (s)] = 0.0
      image [set every repeat] = $image_correct
      size = [0.25, 0.25]
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    TextComponent text_7
      color [set every repeat] = $feedback_colour
      text [set every repeat] = $score_feedback
      stopVal [duration (s)] = 1
      pos = [-0.1, -0.1]
      startVal [time (s)] = 0.0
      letterHeight = 0.10
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    CodeComponent code_3
      End Routine:
        thisExp.addData('Score2',Score2)
      End Experiment:
        thisExp.saveAsWideText(thisExp.dataFileName+'.csv', delim= ',')
  Routine instructions2
    TextComponent text_4
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        End of part 1

        Ask experimenter for instructions of part 2

        press space to continue
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine instructions3
    TextComponent text_13
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        End of part 2

        Ask experimenter for instructions for part 3

        press space to continue
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine sound_file
    SoundComponent sound_1
      sound = sounds\List1.wav
      stopVal [duration (s)] = 10
      startVal [time (s)] = 0.0
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  Routine explicit
    TextComponent text_9
      color = $[-1.000,-1.000,-1.000]
      text = Are you confident ?
      stopVal [duration (s)] = 3
      pos = [0, 0.3]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    PolygonComponent polygon_7
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 3
      pos = [-0.2, -0.2]
      lineColor = $[-1,-1,-1]
      startVal [time (s)] = 0.0
      size = [0.25, 0.25]
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    PolygonComponent polygon_8
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 3
      pos = [0.2, -0.2]
      lineColor = $[-1,-1,-1]
      startVal [time (s)] = 0.0
      size = [0.25, 0.25]
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    TextComponent text_10
      color = $[-1.000,-1.000,-1.000]
      text = Yes
      stopVal [duration (s)] = 3
      pos = [-0.2, -0.2]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_11
      color = $[-1.000,-1.000,-1.000]
      text = No
      stopVal [duration (s)] = 3
      pos = [0.2, -0.2]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    MouseComponent mouse_4
      timeRelativeTo = routine
      stopVal [duration (s)] = 3
      forceEndRoutineOnPress = False
      startVal [time (s)] = 0.0
      saveMouseState = final
    CodeComponent code_2
      Begin Experiment:
        MetacognitiveChoice= ""
        MetacognitieAccuuracy=""
        score_feedback= ""
        feedback_colour= [1,1,1]
        MetaforGamma=999

        numYes=0
        numNo=0
        DiffYes=[]
        DiffNo=[]
      Begin Routine:
        MetacognitiveChoice= ""
        MetacognitieAccuuracy=""
        score_feedback= ""
        MetaforGamma=999
        feedback_colour= [1,1,1]
      End Routine:
        if mouse.isPressedIn(polygon_7):
                    MetacognitiveChoice= "Correct"
                    MetaforGamma=1
                    numYes=numYes+1
                    DiffYes.append(DIFFERENCE)

        elif mouse.isPressedIn(polygon_8):
                    MetacognitiveChoice= "Incorrect"
                    MetaforGamma=0
                    numNo=numNo+1
                    DiffNo.append(DIFFERENCE)

        else:
                    MetacognitiveChoice= "Missed"
                    Score=Score-0.30
                    score_feedback= "-30p"
                    feedback_colour= [1,-1,-1]
                    image_correct= "incorrect.png"

        if MetacognitiveChoice== "Correct" and trial_performance== "Correct":
                    MetacognitieAccuuracy= "Accurate"
                    Score=Score+0.30
                    score_feedback= "+30p"
                    feedback_colour= [-1,1,-1]

        if MetacognitiveChoice== "Incorrect" and trial_performance== "Incorrect":
                    MetacognitieAccuuracy= "Accurate"
                    Score=Score-0.10
                    score_feedback= "-10p"
                    feedback_colour= [1,-1,-1]

        if MetacognitiveChoice== "Correct" and trial_performance== "Incorrect":
                    MetacognitieAccuuracy= "Inaccurate"
                    Score=Score-0.30
                    score_feedback= "-30p"
                    feedback_colour= [1,-1,-1]

        if MetacognitiveChoice== "Incorrect" and trial_performance== "Correct":
                    MetacognitieAccuuracy= "Inaccurate"
                    Score=Score+0.10
                    score_feedback= "+10p"
                    feedback_colour= [-1,1,-1]

        DecimalScore= '{0:.2f}'.format(Score)
        Score2= Score1 + Score3+str(DecimalScore)

        thisExp.addData('MetacognitiveChoice',MetacognitiveChoice)
        thisExp.addData('MetacognitieAccuuracy',MetacognitieAccuuracy)
        thisExp.addData('ObjectforGamma',ObjectforGamma)
        thisExp.addData('MetaforGamma',MetaforGamma)
        thisExp.addData('numYes',numYes)
        thisExp.addData('numNo',numNo)
        thisExp.addData('DiffYes',DiffYes)
        thisExp.addData('DiffNo',DiffNo)
      Each Frame:
        if mouse.isPressedIn(polygon_7):
                    continueRoutine=False

        elif mouse.isPressedIn(polygon_8):
                    continueRoutine=False
  Routine Inr
    TextComponent text_5
      text = Please click the mouse to begin.... 
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    MouseComponent mouse_2
      timeRelativeTo = routine
      forceEndRoutineOnPress = True
      startVal [time (s)] = 0.0
      saveMouseState = final
  Routine trial
    CodeComponent code
      Begin Experiment:
        num_correct_discriminations= 0
        num_incorrect_discriminations= 0
        prop_correct_discriminations=0
        prop_incorrect_discriminations=0
        num_missed_discriminations= 0
        prop_missed_discriminations=0
        trial_total= 0
        trial_performance= ""
        ObjectforGamma=999
        score_feedback= ""
        feedback_colour= [1,1,1]
        MetaforGamma=999

        Score=  2.00
        Score1= 'Prize:  '
        Score3= u"\u00A3"
        DecimalScore= '{0:.2f}'.format(Score)
        Score2= Score1 + Score3+str(DecimalScore)
        image_correct= ""


        SCORE= ""
        colour_feedback=""
        clickTime= 9999

        runorskip=0
        clicked=0
      Begin Routine:
        colour1= colour_initial
        colour2= colour_initial

        clickTime= 9999
        box_selected= ("")

        runorskip=0
        clicked=0
        ObjectforGamma=999
      End Routine:
        if box_selected== correct:
            trial_performance= "Correct"
            ObjectforGamma=1
            num_correct_discriminations= num_correct_discriminations+1
            trial_total= trial_total+1
            image_correct= "correct.png"
            runorskip=1

        if box_selected!= correct and clicked==0:
            trial_performance= "Missed"
            num_missed_discriminations= num_missed_discriminations+1
            trial_total= trial_total+1
            image_correct= "incorrect.png"
            Score=Score-0.30
            score_feedback= "-30p"
            feedback_colour= [1,-1,-1]

        if box_selected!= correct and clicked==1:
            trial_performance= "Incorrect"
            ObjectforGamma=0
            num_incorrect_discriminations= num_incorrect_discriminations +1
            trial_total= trial_total+1
            image_correct= "incorrect.png"
            runorskip=1

        prop_correct_discriminations= num_correct_discriminations/trial_total
        prop_incorrect_discriminations= num_incorrect_discriminations/trial_total

        thisExp.addData('box_selected',box_selected)
        thisExp.addData('trial_total',trial_total)
        thisExp.addData('trial_performance',trial_performance)
        thisExp.addData('num_correct_discriminations',num_correct_discriminations)
        thisExp.addData('num_incorrect_discriminations',num_incorrect_discriminations)
        thisExp.addData('num_missed_discriminations',num_missed_discriminations)
        thisExp.addData('prop_correct_discriminations',prop_correct_discriminations)
        thisExp.addData('prop_incorrect_discriminations',prop_incorrect_discriminations)

        DecimalScore= '{0:.2f}'.format(Score)
        Score2= Score1 + Score3+str(DecimalScore)
      Each Frame:
        t2=int(t)
        t3=4-t2

        if mouse.isPressedIn(square):
                    colour1= colour_selected
                    box_selected= "ONE"
                    clickTime= trialClock.getTime()
                    clicked=1

        if mouse.isPressedIn(square_2):
                    box_selected= "TWO"
                    colour2= colour_selected
                    clickTime= trialClock.getTime()
                    clicked=1

        timer=clickTime+1.5

        if t > timer:
            continueRoutine= False
    TextComponent text_2
      color = $[-1.000,-1.000,1.000]
      text [set every repeat] =  $Score2
      stopVal [duration (s)] = 3
      pos = [0.80, -0.9]
      startVal [time (s)] = 1
      letterHeight = 0.1
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    MouseComponent mouse
      timeRelativeTo = routine
      stopVal [duration (s)] = 3
      forceEndRoutineOnPress = False
      startVal [time (s)] = 1
      saveMouseState = on click
    PolygonComponent square
      stopVal [duration (s)] = 3
      pos = [-0.3, 0]
      lineWidth = 4
      lineColor [set every frame] = $colour1
      startVal [time (s)] = 1
      size = [0.5, 0.5]
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    PolygonComponent square_2
      stopVal [duration (s)] = 3
      pos = [0.3, 0]
      lineWidth = 4
      lineColor [set every frame] = $colour2
      startVal [time (s)] = 1
      size = [0.5, 0.5]
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    TextComponent text_3
      color = $[-1.000,-1.000,-1.000]
      text [set every frame] = $t3
      stopVal [duration (s)] = 3
      pos = [0.9, 0.9]
      startVal [time (s)] = 1
      letterHeight = 0.05
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    PolygonComponent line
      fillColor [set every repeat] = $[-1,-1,$ONE]
      stopVal [duration (s)] = 3
      pos = [-0.3, 0]
      startVal [time (s)] = 1
      size = [0.25, 0.25]
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    PolygonComponent line2
      fillColor [set every repeat] = $[-1,-1,$TWO]
      stopVal [duration (s)] = 3
      pos = [0.3, 0]
      startVal [time (s)] = 1
      size = [0.25, 0.25]
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  Routine BetweenTrials
    TextComponent text
      stopVal [duration (s)] = 0.75
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine Intro
    TextComponent text_6
      text = Please click the mouse to begin....
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    MouseComponent mouse_3
      timeRelativeTo = routine
      forceEndRoutineOnPress = True
      startVal [time (s)] = 0.0
      saveMouseState = final
  Routine trial2
    CodeComponent code_4
      Begin Experiment:
        num_correct_discriminations= 0
        num_incorrect_discriminations= 0
        prop_correct_discriminations=0
        prop_incorrect_discriminations=0
        num_missed_discriminations= 0
        prop_missed_discriminations=0
        trial_total= 0
        trial_performance= ""
        ObjectforGamma=999
        score_feedback= ""
        feedback_colour= [1,1,1]
        MetaforGamma=999

        Score=  2.00
        Score1= 'Prize:  '
        Score3= u"\u00A3"
        DecimalScore= '{0:.2f}'.format(Score)
        Score2= Score1 + Score3+str(DecimalScore)
        image_correct= ""


        SCORE= ""
        colour_feedback=""
        clickTime= 9999

        runorskip=0
        clicked=0

        #import the shuffle routine
        from random import shuffle

        #At the end of this routine, kick off a new clock
        timerClock = core.Clock()

        #Set up the sounds and parameters
        all_sounds = [
        {"id_num":"1","path":"Appalled_1.wav","duration":6,},
        {"id_num":"2","path":"Appealing_1.wav","duration":5,},
        {"id_num":"3","path":"Confronted_2.wav","duration":5,},
        {"id_num":"4","path":"Distaste_1.wav","duration":6,},
        {"id_num":"5","path":"Empathic_2.wav","duration":6,},
        {"id_num":"6","path":"Exonerated_2.wav","duration":6,},
        {"id_num":"7","path":"Grave_1.wav","duration":6,},
        {"id_num":"8","path":"Guarded_3.wav","duration":6,},
        {"id_num":"9","path":"Insincere_3.wav","duration":6,},
        {"id_num":"10","path":"Intimate_1.wav","duration":6,}
        ]

        sound_phase_complete = False

        #Start sound item for movie at couner 1 to help create data headings
        sound_counter = 1
      Each Frame:
        t2=int(t)
        t3=4-t2

        if mouse.isPressedIn(square):
                    colour1= colour_selected
                    box_selected= "ONE"
                    clickTime= trialClock.getTime()
                    soundclick1=sound_item["path"]
                    soundTime1=timerClock.getTime()
                    clicked=1

        if mouse.isPressedIn(square_2):
                    box_selected= "TWO"
                    colour2= colour_selected
                    clickTime= trialClock.getTime()
                    soundclick1=sound_item["path"]
                    soundTime1=timerClock.getTime()
                    clicked=1

        timer=clickTime+1.5

        if t > timer:
            continueRoutine= False


        #Should we now play a sound and can we?
        if sound_phase_complete == False:

            if len(all_sounds) > 0:
                #Pop off one of the sounds (which removes it from the array)
                sound_item = all_sounds.pop()

                #Set up the sound
                playing_sound = sound.Sound(value=sound_item["path"])

                #Set up text on text objects, but not show yet
                #lefttext.text = sound_item["text1"]
                #righttext.text = sound_item["text2"]

                #Kick off the timer
                timerClock.reset()
                playing_sound.play()
                SoundTime=trialClock.getTime()
                sound_phase_complete = True

                #Store sound item sequence
                thisExp.addData('soundplaying', sound_item["path"])
                thisExp.addData('soundplaying_routine', "trial")
                thisExp.addData('SoundTime',SoundTime)

        elif sound_phase_complete == True:

            #If we are at 6 second duration or past, stop sound and show text

            if timerClock.getTime() >= 8:
                    playing_sound.stop()
                    #lefttext.color = [0,0,0]
                    #righttext.color = [0,0,0]

                    #Kick off the timer again
                    timerClock.reset()

                    #Reset flags
                    sound_phase_complete = False
                    text_phase = False

                    #Hide text objects
                    #lefttext.color = [0,0,0]
                    #righttext.color = [0,0,0]

                    #Increment counter
                    sound_counter += 1
      Begin Routine:
        colour1= colour_initial
        colour2= colour_initial

        clickTime= 9999
        box_selected= ("")
        soundclick1= 9999
        soundTime1=9999

        runorskip=0
        clicked=0
        ObjectforGamma=999

        SoundTime=trialClock.getTime()

        #Shuffle the sounds
        shuffle(all_sounds)

        #Top slice 10 sounds and remove from old array
        #current_slice = all_sounds[0:1]
        #del all_sounds[0:1]

        #Initialize flag to say we are not playing and no text

        text_phase = False

        #else:
            #Set a flag to say we are not going to do this routine
            #See "Each Frame" for it in action.
        #    doRoutine = False
      End Routine:
        if box_selected== correct:
            trial_performance= "Correct"
            ObjectforGamma=1
            num_correct_discriminations= num_correct_discriminations+1
            trial_total= trial_total+1
            image_correct= "correct.png"
            runorskip=1

        if box_selected!= correct and clicked==0:
            trial_performance= "Missed"
            num_missed_discriminations= num_missed_discriminations+1
            trial_total= trial_total+1
            image_correct= "incorrect.png"
            Score=Score-0.30
            score_feedback= "-30p"
            feedback_colour= [1,-1,-1]

        if box_selected!= correct and clicked==1:
            trial_performance= "Incorrect"
            ObjectforGamma=0
            num_incorrect_discriminations= num_incorrect_discriminations +1
            trial_total= trial_total+1
            image_correct= "incorrect.png"
            runorskip=1

        prop_correct_discriminations= num_correct_discriminations/trial_total
        prop_incorrect_discriminations= num_incorrect_discriminations/trial_total

        thisExp.addData('box_selected',box_selected)
        thisExp.addData('trial_total',trial_total)
        thisExp.addData('trial_performance',trial_performance)
        thisExp.addData('num_correct_discriminations',num_correct_discriminations)
        thisExp.addData('num_incorrect_discriminations',num_incorrect_discriminations)
        thisExp.addData('num_missed_discriminations',num_missed_discriminations)
        thisExp.addData('prop_correct_discriminations',prop_correct_discriminations)
        thisExp.addData('prop_incorrect_discriminations',prop_incorrect_discriminations)
        thisExp.addData('clicktime',clickTime)
        thisExp.addData('soundclick1',soundclick1)
        thisExp.addData('soundTime1',soundTime1)

        DecimalScore= '{0:.2f}'.format(Score)
        Score2= Score1 + Score3+str(DecimalScore)
    TextComponent text_14
      color = $[-1.000,-1.000,1.000]
      stopVal [duration (s)] = 3
      pos = [0.80, -0.9]
      text [set every repeat] =  $Score2
      startVal [time (s)] = 1
      letterHeight = 0.1
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    MouseComponent mouse_5
      timeRelativeTo = routine
      stopVal [duration (s)] = 3
      forceEndRoutineOnPress = False
      startVal [time (s)] = 1
      saveMouseState = on click
    PolygonComponent square_3
      stopVal [duration (s)] = 3
      lineColor [set every frame] = $colour1
      pos = [-0.3, 0]
      startVal [time (s)] = 1
      lineWidth = 4
      size = [0.5, 0.5]
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    PolygonComponent square_4
      stopVal [duration (s)] = 3
      lineColor [set every frame] = $colour2
      pos = [0.3, 0]
      startVal [time (s)] = 1
      lineWidth = 4
      size = [0.5, 0.5]
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    TextComponent text_15
      color = $[-1.000,-1.000,-1.000]
      stopVal [duration (s)] = 3
      pos = [0.9, 0.9]
      text [set every frame] = $t3
      startVal [time (s)] = 1
      letterHeight = 0.05
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    PolygonComponent line_2
      stopVal [duration (s)] = 3
      pos = [-0.3, 0]
      fillColor [set every repeat] = $[-1,-1,$ONE]
      startVal [time (s)] = 1
      size = [0.25, 0.25]
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    PolygonComponent line2_2
      stopVal [duration (s)] = 3
      pos = [0.3, 0]
      fillColor [set every repeat] = $[-1,-1,$TWO]
      startVal [time (s)] = 1
      size = [0.25, 0.25]
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  Routine explicit2
    CodeComponent code_5
      Begin Experiment:
        MetacognitiveChoice= ""
        MetacognitieAccuuracy=""
        score_feedback= ""
        feedback_colour= [1,1,1]
        MetaforGamma=999

        numYes=0
        numNo=0
        DiffYes=[]
        DiffNo=[]


        clickTime2=""
      Each Frame:
        if mouse.isPressedIn(polygon_7):
                    clickTime2= trialClock.getTime()
                    soundclick2=sound_item["path"]
                    soundTime2=timerClock.getTime()
                    continueRoutine=False

        elif mouse.isPressedIn(polygon_8):
                    clickTime2= trialClock.getTime()
                    soundclick2=sound_item["path"]
                    soundTime2=timerClock.getTime()
                    continueRoutine=False

        #Should we now play a sound and can we?
        if sound_phase_complete == False:

            if len(all_sounds) > 0:
                #Pop off one of the sounds (which removes it from the array)
                sound_item = all_sounds.pop()

                #Set up the sound
                playing_sound = sound.Sound(value=sound_item["path"])

                #Set up text on text objects, but not show yet
                #lefttext.text = sound_item["text1"]
                #righttext.text = sound_item["text2"]

                #Kick off the timer
                timerClock.reset()
                playing_sound.play()
                SoundTime=trialClock.getTime()
                sound_phase_complete = True

                #Store sound item sequence
                thisExp.addData('soundplaying', sound_item["path"])
                thisExp.addData('soundplaying_routine', "explicit")
                thisExp.addData('SoundTime',SoundTime)

        elif sound_phase_complete == True:

            #If we are at 6 second duration or past, stop sound and show text

            if timerClock.getTime() >= 8:
                    playing_sound.stop()
                    #lefttext.color = [0,0,0]
                    #righttext.color = [0,0,0]

                    #Kick off the timer again
                    timerClock.reset()

                    #Reset flags
                    sound_phase_complete = False
                    text_phase = False

                    #Hide text objects
                    #lefttext.color = [0,0,0]
                    #righttext.color = [0,0,0]

                    #Increment counter
                    sound_counter += 1
      Begin Routine:
        MetacognitiveChoice= ""
        MetacognitieAccuuracy=""
        score_feedback= ""
        MetaforGamma=999
        feedback_colour= [1,1,1]

        SoundTime=trialClock.getTime()
        SoundTime2=trialClock.getTime()
        soundclick2=""

        #Shuffle the sounds
        shuffle(all_sounds)

        #Top slice 10 sounds and remove from old array
        #current_slice = all_sounds[0:1]
        #del all_sounds[0:1]

        #Initialize flag to say we are not playing and no text

        text_phase = False

        #else:
            #Set a flag to say we are not going to do this routine
            #See "Each Frame" for it in action.
        #    doRoutine = False
      End Routine:
        if mouse.isPressedIn(polygon_7):
                    MetacognitiveChoice= "Correct"
                    MetaforGamma=1
                    numYes=numYes+1
                    DiffYes.append(DIFFERENCE)

        elif mouse.isPressedIn(polygon_8):
                    MetacognitiveChoice= "Incorrect"
                    MetaforGamma=0
                    numNo=numNo+1
                    DiffNo.append(DIFFERENCE)

        else:
                    MetacognitiveChoice= "Missed"
                    Score=Score-0.30
                    score_feedback= "-30p"
                    feedback_colour= [1,-1,-1]
                    image_correct= "incorrect.png"

        if MetacognitiveChoice== "Correct" and trial_performance== "Correct":
                    MetacognitieAccuuracy= "Accurate"
                    Score=Score+0.30
                    score_feedback= "+30p"
                    feedback_colour= [-1,1,-1]

        if MetacognitiveChoice== "Incorrect" and trial_performance== "Incorrect":
                    MetacognitieAccuuracy= "Accurate"
                    Score=Score-0.10
                    score_feedback= "-10p"
                    feedback_colour= [1,-1,-1]

        if MetacognitiveChoice== "Correct" and trial_performance== "Incorrect":
                    MetacognitieAccuuracy= "Inaccurate"
                    Score=Score-0.30
                    score_feedback= "-30p"
                    feedback_colour= [1,-1,-1]

        if MetacognitiveChoice== "Incorrect" and trial_performance== "Correct":
                    MetacognitieAccuuracy= "Inaccurate"
                    Score=Score+0.10
                    score_feedback= "+10p"
                    feedback_colour= [-1,1,-1]

        DecimalScore= '{0:.2f}'.format(Score)
        Score2= Score1 + Score3+str(DecimalScore)

        thisExp.addData('clickTime2',clickTime2)
        thisExp.addData('soundclick2',soundclick2)
        thisExp.addData('soundTime2',soundTime2)
        thisExp.addData('MetacognitiveChoice',MetacognitiveChoice)
        thisExp.addData('MetacognitieAccuuracy',MetacognitieAccuuracy)
        thisExp.addData('ObjectforGamma',ObjectforGamma)
        thisExp.addData('MetaforGamma',MetaforGamma)
        thisExp.addData('numYes',numYes)
        thisExp.addData('numNo',numNo)
        thisExp.addData('DiffYes',DiffYes)
        thisExp.addData('DiffNo',DiffNo)
    TextComponent text_16
      color = $[-1.000,-1.000,-1.000]
      stopVal [duration (s)] = 3
      pos = [0, 0.3]
      text = Are you confident ?
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    PolygonComponent polygon
      stopVal [duration (s)] = 3
      lineColor = $[-1,-1,-1]
      pos = [-0.2, -0.2]
      fillColor = $[1,1,1]
      startVal [time (s)] = 0.0
      size = [0.25, 0.25]
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    PolygonComponent polygon_9
      stopVal [duration (s)] = 3
      lineColor = $[-1,-1,-1]
      pos = [0.2, -0.2]
      fillColor = $[1,1,1]
      startVal [time (s)] = 0.0
      size = [0.25, 0.25]
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    TextComponent text_17
      color = $[-1.000,-1.000,-1.000]
      stopVal [duration (s)] = 3
      pos = [-0.2, -0.2]
      text = Yes
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_18
      color = $[-1.000,-1.000,-1.000]
      stopVal [duration (s)] = 3
      pos = [0.2, -0.2]
      text = No
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    MouseComponent mouse_6
      timeRelativeTo = routine
      stopVal [duration (s)] = 3
      forceEndRoutineOnPress = False
      startVal [time (s)] = 0.0
      saveMouseState = final
  Routine sound_alone
    SoundComponent sound_2
      sound [set every repeat] = $audio
      stopVal [duration (s)] = 6
      startVal [time (s)] = 0.0
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    TextComponent text_12
      stopVal [duration (s)] = 2
      startVal [time (s)] = 6
      letterHeight = 0.1
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  Routine feedback2
    CodeComponent code_6
      Each Frame:
        #Should we now play a sound and can we?
        if sound_phase_complete == False:

            if len(all_sounds) > 0:
                #Pop off one of the sounds (which removes it from the array)
                sound_item = all_sounds.pop()

                #Set up the sound
                playing_sound = sound.Sound(value=sound_item["path"])

                #Set up text on text objects, but not show yet
                #lefttext.text = sound_item["text1"]
                #righttext.text = sound_item["text2"]

                #Kick off the timer
                timerClock.reset()
                playing_sound.play()
                sound_phase_complete = True

                #Store sound item sequence
                thisExp.addData('soundplaying', sound_item["path"])
                thisExp.addData('soundplaying_routine', "feedback")
                thisExp.addData('SoundTime',SoundTime)

        elif sound_phase_complete == True:

            #If we are at 6 second duration or past, stop sound and show text

            if timerClock.getTime() >= 8:
                    playing_sound.stop()
                    #lefttext.color = [0,0,0]
                    #righttext.color = [0,0,0]

                    #Kick off the timer again
                    timerClock.reset()

                    #Reset flags
                    sound_phase_complete = False
                    text_phase = False

                    #Hide text objects
                    #lefttext.color = [0,0,0]
                    #righttext.color = [0,0,0]

                    #Increment counter
                    sound_counter += 1
      Begin Routine:
        #Shuffle the sounds
        shuffle(all_sounds)

        #Top slice 10 sounds and remove from old array
        #current_slice = all_sounds[0:1]
        #del all_sounds[0:1]

        #Initialize flag to say we are not playing and no text

        text_phase = False

        #else:
            #Set a flag to say we are not going to do this routine
            #See "Each Frame" for it in action.
        #    doRoutine = False
      End Routine:
        thisExp.addData('Score2',Score2)
      End Experiment:
        thisExp.saveAsWideText(thisExp.dataFileName+'.csv', delim= ',')
    ImageComponent image_2
      stopVal [duration (s)] = 1
      pos = [-0.1, 0.1]
      startVal [time (s)] = 0.0
      image [set every repeat] = $image_correct
      size = [0.25, 0.25]
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    TextComponent text_19
      color [set every repeat] = $feedback_colour
      stopVal [duration (s)] = 1
      pos = [-0.1, -0.1]
      text [set every repeat] = $score_feedback
      startVal [time (s)] = 0.0
      letterHeight = 0.10
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Flow
  Routine Intro
  Routine Pause
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = BlueParameters_Practise.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'colour_initial': [0, 0, 0], u'colour_selected': [0, 170, 0], u'TWO': 0.10300000000000004, u'ONE': 0.553, u'DIFFERENCE': 0.45, u'correct': u'ONE'},
      {u'colour_initial': [0, 0, 0], u'colour_selected': [0, 170, 0], u'TWO': 0.51257, u'ONE': 0.515, u'DIFFERENCE': 0.00243, u'correct': u'ONE'},
      {u'colour_initial': [0, 0, 0], u'colour_selected': [0, 170, 0], u'TWO': 0.5080000000000001, u'ONE': 0.527, u'DIFFERENCE': 0.01899999999999994, u'correct': u'ONE'},
      {u'colour_initial': [0, 0, 0], u'colour_selected': [0, 170, 0], u'TWO': 0.501, u'ONE': 0.48200000000000004, u'DIFFERENCE': 0.01899999999999994, u'correct': u'TWO'},
      {u'colour_initial': [0, 0, 0], u'colour_selected': [0, 170, 0], u'TWO': 0.6400000000000001, u'ONE': 0.669, u'DIFFERENCE': 0.028999999999999942, u'correct': u'ONE'},
      {u'colour_initial': [0, 0, 0], u'colour_selected': [0, 170, 0], u'TWO': 0.473, u'ONE': 0.602, u'DIFFERENCE': 0.129, u'correct': u'ONE'},
      {u'colour_initial': [0, 0, 0], u'colour_selected': [0, 170, 0], u'TWO': 0.577, u'ONE': 0.12699999999999995, u'DIFFERENCE': 0.45, u'correct': u'TWO'},
      {u'colour_initial': [0, 0, 0], u'colour_selected': [0, 170, 0], u'TWO': 0.58, u'ONE': 0.57692, u'DIFFERENCE': 0.00308, u'correct': u'TWO'},
      {u'colour_initial': [0, 0, 0], u'colour_selected': [0, 170, 0], u'TWO': 0.527, u'ONE': 0.4980000000000001, u'DIFFERENCE': 0.028999999999999942, u'correct': u'TWO'},
      {u'colour_initial': [0, 0, 0], u'colour_selected': [0, 170, 0], u'TWO': 0.614, u'ONE': 0.485, u'DIFFERENCE': 0.129, u'correct': u'TWO'}]
    Routine trial
    LoopInitiator trials_2 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = $runorskip
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      Routine explicit
    LoopTerminator trials_2
    Routine feedback
  LoopTerminator trials
  Routine instructions2
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = Practice_audio.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'audio': u'Appalled_2.wav'},
      {u'audio': u'Confronted_1.wav'},
      {u'audio': u'Guarded_1.wav'},
      {u'audio': u'Resentful_1.wav'},
      {u'audio': u'Uneasy_1.wav'}]
    Routine sound_alone
  LoopTerminator trials_3
  Routine instructions3
  LoopInitiator trials_5 loopType="TrialHandler"
    conditionsFile = BlueParameters_Practise.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'colour_initial': [0, 0, 0], u'TWO': 0.10300000000000004, u'colour_selected': [0, 170, 0], u'ONE': 0.553, u'DIFFERENCE': 0.45, u'correct': u'ONE'},
      {u'colour_initial': [0, 0, 0], u'TWO': 0.51257, u'colour_selected': [0, 170, 0], u'ONE': 0.515, u'DIFFERENCE': 0.00243, u'correct': u'ONE'},
      {u'colour_initial': [0, 0, 0], u'TWO': 0.5080000000000001, u'colour_selected': [0, 170, 0], u'ONE': 0.527, u'DIFFERENCE': 0.01899999999999994, u'correct': u'ONE'},
      {u'colour_initial': [0, 0, 0], u'TWO': 0.501, u'colour_selected': [0, 170, 0], u'ONE': 0.48200000000000004, u'DIFFERENCE': 0.01899999999999994, u'correct': u'TWO'},
      {u'colour_initial': [0, 0, 0], u'TWO': 0.6400000000000001, u'colour_selected': [0, 170, 0], u'ONE': 0.669, u'DIFFERENCE': 0.028999999999999942, u'correct': u'ONE'},
      {u'colour_initial': [0, 0, 0], u'TWO': 0.473, u'colour_selected': [0, 170, 0], u'ONE': 0.602, u'DIFFERENCE': 0.129, u'correct': u'ONE'},
      {u'colour_initial': [0, 0, 0], u'TWO': 0.577, u'colour_selected': [0, 170, 0], u'ONE': 0.12699999999999995, u'DIFFERENCE': 0.45, u'correct': u'TWO'},
      {u'colour_initial': [0, 0, 0], u'TWO': 0.58, u'colour_selected': [0, 170, 0], u'ONE': 0.57692, u'DIFFERENCE': 0.00308, u'correct': u'TWO'},
      {u'colour_initial': [0, 0, 0], u'TWO': 0.527, u'colour_selected': [0, 170, 0], u'ONE': 0.4980000000000001, u'DIFFERENCE': 0.028999999999999942, u'correct': u'TWO'},
      {u'colour_initial': [0, 0, 0], u'TWO': 0.614, u'colour_selected': [0, 170, 0], u'ONE': 0.485, u'DIFFERENCE': 0.129, u'correct': u'TWO'}]
    Routine trial2
    LoopInitiator trials_4 loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = $runorskip
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      Routine explicit2
    LoopTerminator trials_4
    Routine feedback2
  LoopTerminator trials_5
  Routine bridge
  Routine end
