PsychoPy2experiment version="1.83.04"
Settings
  Show mouse = True
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], "Colour Explicit", expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1366, 768]
  Full-screen window = True
  Experiment info = {u'Session': u'1', u'participant': u''}
  expName = G Task- Line version (2)
  Units = use prefs
  Screen = 1
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Routines
  Routine Pause
    TextComponent text_8
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine end
    TextComponent text_3
      text = End of experiment
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine feedback
    CodeComponent code_3
      End Routine:
        thisExp.addData('Score2',Score2)
      End Experiment:
        thisExp.saveAsWideText(thisExp.dataFileName+'.csv', delim= ',')
      Each Frame:
        #Should we now play a sound and can we?
        if sound_phase_complete == False:

            if len(all_sounds) > 0:
                #Pop off one of the sounds (which removes it from the array)
                sound_item = all_sounds.pop()

                #Set up the sound
                playing_sound = sound.Sound(value=sound_item["path"])

                #Set up text on text objects, but not show yet
                #lefttext.text = sound_item["text1"]
                #righttext.text = sound_item["text2"]

                #Kick off the timer
                timerClock.reset()
                playing_sound.play()
                sound_phase_complete = True

                #Store sound item sequence
                thisExp.addData('soundplaying', sound_item["path"])
                thisExp.addData('soundplaying_routine', "feedback")
                thisExp.addData('SoundTime',SoundTime)

        elif sound_phase_complete == True:

            #If we are at 6 second duration or past, stop sound and show text

            if timerClock.getTime() >= 8:
                    playing_sound.stop()
                    #lefttext.color = [0,0,0]
                    #righttext.color = [0,0,0]

                    #Kick off the timer again
                    timerClock.reset()

                    #Reset flags
                    sound_phase_complete = False
                    text_phase = False

                    #Hide text objects
                    #lefttext.color = [0,0,0]
                    #righttext.color = [0,0,0]

                    #Increment counter
                    sound_counter += 1
    ImageComponent image
      stopVal [duration (s)] = 1
      pos = [-0.1, 0.1]
      startVal [time (s)] = 0.0
      image [set every repeat] = $image_correct
      size = [0.25, 0.25]
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    TextComponent text_7
      color [set every repeat] = $feedback_colour
      text [set every repeat] = $score_feedback
      stopVal [duration (s)] = 1
      pos = [-0.1, -0.1]
      startVal [time (s)] = 0.0
      letterHeight = 0.10
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  Routine sound_file
    SoundComponent sound_1
      sound = sounds\List1.wav
      stopVal [duration (s)] = 10
      startVal [time (s)] = 0.0
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  Routine explicit
    CodeComponent code_2
      Begin Experiment:
        MetacognitiveChoice= ""
        MetacognitieAccuuracy=""
        score_feedback= ""
        feedback_colour= [1,1,1]
        MetaforGamma=999

        numA=0
        numB=0
        numC=0
        numD=0
        numYes=0
        numNo=0
        DiffYes=[]
        DiffNo=[]


        clickTime2=""
      Begin Routine:
        MetacognitiveChoice= ""
        MetacognitieAccuuracy=""
        score_feedback= ""
        MetaforGamma=999
        feedback_colour= [1,1,1]

        SoundTime=trialClock.getTime()

        soundclick2=""
        soundTime2=timerClock.getTime()

        #Shuffle the sounds
        #shuffle(all_sounds)

        #Top slice 10 sounds and remove from old array
        #current_slice = all_sounds[0:1]
        #del all_sounds[0:1]

        #Initialize flag to say we are not playing and no text

        #text_phase = False

        #else:
            #Set a flag to say we are not going to do this routine
            #See "Each Frame" for it in action.
        #    doRoutine = False
      End Routine:
        if mouse.isPressedIn(polygon_7):
                    MetacognitiveChoice= "Correct"
                    MetaforGamma=1
                    numYes=numYes+1
                    DiffYes.append(DIFFERENCE)

        elif mouse.isPressedIn(polygon_8):
                    MetacognitiveChoice= "Incorrect"
                    MetaforGamma=0
                    numNo=numNo+1
                    DiffNo.append(DIFFERENCE)

        else:
                    MetacognitiveChoice= "Missed"
                    Score=Score-0.30
                    score_feedback= "-30p"
                    feedback_colour= [1,-1,-1]
                    image_correct= "incorrect.png"

        if MetacognitiveChoice== "Correct" and trial_performance== "Correct":
                    MetacognitieAccuuracy= "Accurate"
                    numA=numA+1
                    Score=Score+0.30
                    score_feedback= "+30p"
                    feedback_colour= [-1,1,-1]

        if MetacognitiveChoice== "Incorrect" and trial_performance== "Incorrect":
                    MetacognitieAccuuracy= "Accurate"
                    numD=numD+1
                    Score=Score-0.10
                    score_feedback= "-10p"
                    feedback_colour= [1,-1,-1]

        if MetacognitiveChoice== "Correct" and trial_performance== "Incorrect":
                    MetacognitieAccuuracy= "Inaccurate"
                    numB=numB+1
                    Score=Score-0.30
                    score_feedback= "-30p"
                    feedback_colour= [1,-1,-1]

        if MetacognitiveChoice== "Incorrect" and trial_performance== "Correct":
                    MetacognitieAccuuracy= "Inaccurate"
                    numC=numC+1
                    Score=Score+0.10
                    score_feedback= "+10p"
                    feedback_colour= [-1,1,-1]

        DecimalScore= '{0:.2f}'.format(Score)
        Score2= Score1 + Score3+str(DecimalScore)

        thisExp.addData('clickTime2',clickTime2)
        thisExp.addData('soundclick2',soundclick2)
        thisExp.addData('soundTime2',soundTime2)
        thisExp.addData('MetacognitiveChoice',MetacognitiveChoice)
        thisExp.addData('MetacognitieAccuuracy',MetacognitieAccuuracy)
        thisExp.addData('ObjectforGamma',ObjectforGamma)
        thisExp.addData('MetaforGamma',MetaforGamma)
        thisExp.addData('numYes',numYes)
        thisExp.addData('numNo',numNo)
        thisExp.addData('DiffYes',DiffYes)
        thisExp.addData('DiffNo',DiffNo)
        thisExp.addData('numA',numA)
        thisExp.addData('numB',numB)
        thisExp.addData('numC',numC)
        thisExp.addData('numD',numD)
      Each Frame:
        if mouse.isPressedIn(polygon_7):
                    continueRoutine=False
                    clickTime2= trialClock.getTime()
                    soundclick2=sound_item["path"]
                    soundTime2=timerClock.getTime()

        elif mouse.isPressedIn(polygon_8):
                    continueRoutine=False
                    clickTime2= trialClock.getTime()
                    soundclick2=sound_item["path"]
                    soundTime2=timerClock.getTime()

        #Should we now play a sound and can we?
        if sound_phase_complete == False:

            if len(all_sounds) > 0:
                #Pop off one of the sounds (which removes it from the array)
                sound_item = all_sounds.pop()

                #Set up the sound
                playing_sound = sound.Sound(value=sound_item["path"])

                #Set up text on text objects, but not show yet
                #lefttext.text = sound_item["text1"]
                #righttext.text = sound_item["text2"]

                #Kick off the timer
                timerClock.reset()
                playing_sound.play()
                SoundTime=trialClock.getTime()
                sound_phase_complete = True

                #Store sound item sequence
                thisExp.addData('soundplaying', sound_item["path"])
                thisExp.addData('soundplaying_routine', "explicit")
                thisExp.addData('SoundTime',SoundTime)

        elif sound_phase_complete == True:

            #If we are at 6 second duration or past, stop sound and show text

            if timerClock.getTime() >= 8:
                    playing_sound.stop()
                    #lefttext.color = [0,0,0]
                    #righttext.color = [0,0,0]

                    #Kick off the timer again
                    timerClock.reset()

                    #Reset flags
                    sound_phase_complete = False
                    text_phase = False

                    #Hide text objects
                    #lefttext.color = [0,0,0]
                    #righttext.color = [0,0,0]

                    #Increment counter
                    sound_counter += 1
    TextComponent text_9
      color = $[-1.000,-1.000,-1.000]
      text = Are you confident ?
      stopVal [duration (s)] = 3
      pos = [0, 0.3]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    PolygonComponent polygon_7
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 3
      pos = [-0.2, -0.2]
      lineColor = $[-1,-1,-1]
      startVal [time (s)] = 0.0
      size = [0.25, 0.25]
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    PolygonComponent polygon_8
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 3
      pos = [0.2, -0.2]
      lineColor = $[-1,-1,-1]
      startVal [time (s)] = 0.0
      size = [0.25, 0.25]
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    TextComponent text_10
      color = $[-1.000,-1.000,-1.000]
      text = Yes
      stopVal [duration (s)] = 3
      pos = [-0.2, -0.2]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_11
      color = $[-1.000,-1.000,-1.000]
      text = No
      stopVal [duration (s)] = 3
      pos = [0.2, -0.2]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    MouseComponent mouse_4
      timeRelativeTo = routine
      stopVal [duration (s)] = 3
      forceEndRoutineOnPress = False
      startVal [time (s)] = 0.0
      saveMouseState = final
  Routine Inr
    TextComponent text_5
      text = Please click the mouse to begin.... 
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    MouseComponent mouse_2
      timeRelativeTo = routine
      forceEndRoutineOnPress = True
      startVal [time (s)] = 0.0
      saveMouseState = final
  Routine trial
    CodeComponent code
      Begin Experiment:
        num_correct_discriminations= 0
        num_incorrect_discriminations= 0
        prop_correct_discriminations=0
        prop_incorrect_discriminations=0
        num_missed_discriminations= 0
        prop_missed_discriminations=0
        trial_total= 0
        trial_performance= ""
        ObjectforGamma=999
        score_feedback= ""
        feedback_colour= [1,1,1]
        MetaforGamma=999

        Score=  2.00
        Score1= 'Prize:  '
        Score3= u"\u00A3"
        DecimalScore= '{0:.2f}'.format(Score)
        Score2= Score1 + Score3+str(DecimalScore)
        image_correct= ""


        SCORE= ""
        colour_feedback=""
        clickTime= 9999
        SoundTime=9999

        runorskip=0
        clicked=0

        #import the shuffle routine
        #from random import shuffle

        #At the end of this routine, kick off a new clock
        timerClock = core.Clock()

        #Set up the sounds and parameters
        all_sounds = [
        {"id_num":"11","path":"Lured_1.wav","duration":5,},
        {"id_num":"12","path":"Mortified_3.wav","duration":6,},
        {"id_num":"13","path":"Nostalgic_1.wav","duration":6,},
        {"id_num":"14","path":"Reassured_1.wav","duration":6,},
        {"id_num":"15","path":"Resentful_1.wav","duration":6,},
        {"id_num":"16","path":"Stern_2.wav","duration":6,},
        {"id_num":"17","path":"Subdued_2.wav","duration":5,},
        {"id_num":"18","path":"Subservient_1.wav","duration":6,},
        {"id_num":"19","path":"Uneasy_2.wav","duration":6,},
        {"id_num":"20","path":"Vibrant_3.wav","duration":6,},
        {"id_num":"21","path":"Appalled_2.wav","duration":6,},
        {"id_num":"22","path":"Appealing_2.wav","duration":5,},
        {"id_num":"23","path":"Confronted_1.wav","duration":6,},
        {"id_num":"24","path":"Distaste_2.wav","duration":6,},
        {"id_num":"25","path":"Empathic_1.wav","duration":6,},
        {"id_num":"26","path":"Exonerated_1.wav","duration":6,},
        {"id_num":"27","path":"Grave_2.wav","duration":5,},
        {"id_num":"28","path":"Guarded_1.wav","duration":6,},
        {"id_num":"29","path":"Insincere_1.wav","duration":6,},
        {"id_num":"30","path":"Intimate_3.wav","duration":6,},
        {"id_num":"31","path":"Lured_2.wav","duration":5,},
        {"id_num":"32","path":"Mortified_2.wav","duration":6,},
        {"id_num":"33","path":"Nostalgic_2.wav","duration":6,},
        {"id_num":"34","path":"Reassured_2.wav","duration":6,},
        {"id_num":"35","path":"Resentful_2.wav","duration":6,},
        {"id_num":"36","path":"Stern_1.wav","duration":6,},
        {"id_num":"37","path":"Subdued_1.wav","duration":6,},
        {"id_num":"38","path":"Subservient_3.wav","duration":6,},
        {"id_num":"39","path":"Uneasy_3.wav","duration":5,},
        {"id_num":"40","path":"Vibrant_2.wav","duration":5,},
        {"id_num":"41","path":"Appalled_1.wav","duration":6,},
        {"id_num":"42","path":"Appealing_1.wav","duration":5,},
        {"id_num":"43","path":"Confronted_2.wav","duration":5,},
        {"id_num":"44","path":"Distaste_1.wav","duration":6,},
        {"id_num":"45","path":"Empathic_2.wav","duration":6,},
        {"id_num":"46","path":"Exonerated_2.wav","duration":6,},
        {"id_num":"47","path":"Grave_1.wav","duration":6,},
        {"id_num":"48","path":"Guarded_3.wav","duration":6,},
        {"id_num":"49","path":"Insincere_3.wav","duration":6,},
        {"id_num":"50","path":"Intimate_1.wav","duration":6,},
        {"id_num":"51","path":"Lured_1.wav","duration":5,},
        {"id_num":"52","path":"Mortified_3.wav","duration":6,},
        {"id_num":"53","path":"Nostalgic_1.wav","duration":6,},
        {"id_num":"54","path":"Reassured_1.wav","duration":6,},
        {"id_num":"55","path":"Resentful_1.wav","duration":6,},
        {"id_num":"56","path":"Stern_2.wav","duration":6,},
        {"id_num":"57","path":"Subdued_2.wav","duration":5,},
        {"id_num":"58","path":"Subservient_1.wav","duration":6,},
        {"id_num":"59","path":"Uneasy_2.wav","duration":6,},
        {"id_num":"60","path":"Vibrant_3.wav","duration":6,},
        {"id_num":"61","path":"Appalled_2.wav","duration":6,},
        {"id_num":"62","path":"Appealing_2.wav","duration":5,},
        {"id_num":"63","path":"Confronted_1.wav","duration":6,},
        {"id_num":"64","path":"Distaste_2.wav","duration":6,},
        {"id_num":"65","path":"Empathic_1.wav","duration":6,},
        {"id_num":"66","path":"Exonerated_1.wav","duration":6,},
        {"id_num":"67","path":"Grave_2.wav","duration":5,},
        {"id_num":"68","path":"Guarded_1.wav","duration":6,},
        {"id_num":"69","path":"Insincere_1.wav","duration":6,},
        {"id_num":"70","path":"Intimate_3.wav","duration":6,},
        {"id_num":"71","path":"Lured_2.wav","duration":5,},
        {"id_num":"72","path":"Mortified_2.wav","duration":6,},
        {"id_num":"73","path":"Nostalgic_2.wav","duration":6,},
        {"id_num":"74","path":"Reassured_2.wav","duration":6,},
        {"id_num":"75","path":"Resentful_2.wav","duration":6,},
        {"id_num":"76","path":"Stern_1.wav","duration":6,},
        {"id_num":"77","path":"Subdued_1.wav","duration":6,},
        {"id_num":"78","path":"Subservient_3.wav","duration":6,},
        {"id_num":"79","path":"Uneasy_3.wav","duration":5,},
        {"id_num":"80","path":"Vibrant_2.wav","duration":5,}
        ]

        sound_phase_complete = False

        #Start sound item for movie at couner 1 to help create data headings
        sound_counter = 1
      Begin Routine:
        colour1= colour_initial
        colour2= colour_initial

        clickTime= 9999
        box_selected= ("")

        runorskip=0
        clicked=0
        ObjectforGamma=999

        SoundTime=trialClock.getTime()

        soundclick1=""
        soundTime1=timerClock.getTime()


        #Shuffle the sounds
        #shuffle(all_sounds)

        #Top slice 10 sounds and remove from old array
        #current_slice = all_sounds[0:1]
        #del all_sounds[0:1]

        #Initialize flag to say we are not playing and no text



        #else:
            #Set a flag to say we are not going to do this routine
            #See "Each Frame" for it in action.
        #    doRoutine = False
      End Routine:
        if box_selected== correct:
            trial_performance= "Correct"
            ObjectforGamma=1
            num_correct_discriminations= num_correct_discriminations+1
            trial_total= trial_total+1
            image_correct= "correct.png"
            runorskip=1

        if box_selected!= correct and clicked==0:
            trial_performance= "Missed"
            num_missed_discriminations= num_missed_discriminations+1
            trial_total= trial_total+1
            image_correct= "incorrect.png"
            Score=Score-0.30
            score_feedback= "-30p"
            feedback_colour= [1,-1,-1]

        if box_selected!= correct and clicked==1:
            trial_performance= "Incorrect"
            ObjectforGamma=0
            num_incorrect_discriminations= num_incorrect_discriminations +1
            trial_total= trial_total+1
            image_correct= "incorrect.png"
            runorskip=1

        prop_correct_discriminations= num_correct_discriminations/trial_total
        prop_incorrect_discriminations= num_incorrect_discriminations/trial_total

        thisExp.addData('box_selected',box_selected)
        thisExp.addData('trial_total',trial_total)
        thisExp.addData('trial_performance',trial_performance)
        thisExp.addData('num_correct_discriminations',num_correct_discriminations)
        thisExp.addData('num_incorrect_discriminations',num_incorrect_discriminations)
        thisExp.addData('num_missed_discriminations',num_missed_discriminations)
        thisExp.addData('clicktime',clickTime)
        thisExp.addData('soundclick1',soundclick1)
        thisExp.addData('soundTime1',soundTime1)

        DecimalScore= '{0:.2f}'.format(Score)
        Score2= Score1 + Score3+str(DecimalScore)
      Each Frame:
        t2=int(t)
        t3=4-t2

        if mouse.isPressedIn(square):
                    colour1= colour_selected
                    box_selected= "ONE"
                    clickTime= trialClock.getTime()
                    soundclick1=sound_item["path"]
                    soundTime1=timerClock.getTime()
                    clicked=1

        if mouse.isPressedIn(square_2):
                    box_selected= "TWO"
                    colour2= colour_selected
                    clickTime= trialClock.getTime()
                    soundclick1=sound_item["path"]
                    soundTime1=timerClock.getTime()
                    clicked=1

        timer=clickTime+1.5

        if t > timer:
            continueRoutine= False

        #Should we now play a sound and can we?
        if sound_phase_complete == False:

            if len(all_sounds) > 0:
                #Pop off one of the sounds (which removes it from the array)
                sound_item = all_sounds.pop()

                #Set up the sound
                playing_sound = sound.Sound(value=sound_item["path"])

                #Set up text on text objects, but not show yet
                #lefttext.text = sound_item["text1"]
                #righttext.text = sound_item["text2"]

                #Kick off the timer
                timerClock.reset()
                playing_sound.play()
                SoundTime=trialClock.getTime()
                sound_phase_complete = True

                #Store sound item sequence
                thisExp.addData('soundplaying', sound_item["path"])
                thisExp.addData('soundplaying_routine', "trial")
                thisExp.addData('SoundTime',SoundTime)

        elif sound_phase_complete == True:

            #If we are at 6 second duration or past, stop sound and show text

            if timerClock.getTime() >= 8:
                    playing_sound.stop()
                    #lefttext.color = [0,0,0]
                    #righttext.color = [0,0,0]

                    #Kick off the timer again
                    timerClock.reset()

                    #Reset flags
                    sound_phase_complete = False
                    text_phase = False

                    #Hide text objects
                    #lefttext.color = [0,0,0]
                    #righttext.color = [0,0,0]

                    #Increment counter
                    sound_counter += 1
    TextComponent text_2
      color = $[-1.000,-1.000,1.000]
      text [set every repeat] =  $Score2
      stopVal [duration (s)] = 3
      pos = [0.80, -0.9]
      startVal [time (s)] = 1
      letterHeight = 0.1
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    MouseComponent mouse
      timeRelativeTo = routine
      stopVal [duration (s)] = 3
      forceEndRoutineOnPress = False
      startVal [time (s)] = 1
      saveMouseState = on click
    PolygonComponent square
      stopVal [duration (s)] = 3
      pos = [-0.3, 0]
      lineWidth = 4
      lineColor [set every frame] = $colour1
      startVal [time (s)] = 1
      size = [0.5, 0.5]
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    PolygonComponent square_2
      stopVal [duration (s)] = 3
      pos = [0.3, 0]
      lineWidth = 4
      lineColor [set every frame] = $colour2
      startVal [time (s)] = 1
      size = [0.5, 0.5]
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    PolygonComponent line
      fillColor [set every repeat] = $[-1,-1,$ONE]
      stopVal [duration (s)] = 3
      pos = [-0.3, 0]
      startVal [time (s)] = 1
      size = [0.25, 0.25]
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    PolygonComponent line2
      fillColor [set every repeat] = $[-1,-1,$TWO]
      stopVal [duration (s)] = 3
      pos = [0.3, 0]
      startVal [time (s)] = 1
      size = [0.25, 0.25]
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  Routine BetweenTrials
    TextComponent text
      stopVal [duration (s)] = 0.75
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine Intro
    TextComponent text_6
      text = Please click the mouse to begin....
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    MouseComponent mouse_3
      timeRelativeTo = routine
      forceEndRoutineOnPress = True
      startVal [time (s)] = 0.0
      saveMouseState = final
Flow
  Routine Intro
  Routine Pause
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = BlueParameters_Dichotomous.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'diff2': 0.8137432188065099, u'colour_initial': [0, 0, 0], u'colour_selected': [0, 170, 0], u'TWO': 0.10300000000000004, u'ONE': 0.553, u'DIFFERENCE': 0.45, u'correct': u'ONE'},
      {u'diff2': 0.5217391304347826, u'colour_initial': [0, 0, 0], u'colour_selected': [0, 170, 0], u'TWO': 0.253, u'ONE': 0.529, u'DIFFERENCE': 0.276, u'correct': u'ONE'},
      {u'diff2': 0.046474358974358816, u'colour_initial': [0, 0, 0], u'colour_selected': [0, 170, 0], u'TWO': 0.624, u'ONE': 0.5950000000000001, u'DIFFERENCE': 0.0289999999999999, u'correct': u'TWO'},
      {u'diff2': 0.0127209705372617, u'colour_initial': [0, 0, 0], u'colour_selected': [0, 170, 0], u'TWO': 0.5696599999999999, u'ONE': 0.577, u'DIFFERENCE': 0.00734, u'correct': u'ONE'},
      {u'diff2': 0.31418312387791736, u'colour_initial': [0, 0, 0], u'colour_selected': [0, 170, 0], u'TWO': 0.557, u'ONE': 0.38200000000000006, u'DIFFERENCE': 0.175, u'correct': u'TWO'},
      {u'diff2': 0.09206039076376556, u'colour_initial': [0, 0, 0], u'colour_selected': [0, 170, 0], u'TWO': 0.563, u'ONE': 0.5111699999999999, u'DIFFERENCE': 0.05183, u'correct': u'TWO'},
      {u'diff2': 0.07550077041602457, u'colour_initial': [0, 0, 0], u'colour_selected': [0, 170, 0], u'TWO': 0.649, u'ONE': 0.6000000000000001, u'DIFFERENCE': 0.048999999999999946, u'correct': u'TWO'},
      {u'diff2': 0.10117302052785924, u'colour_initial': [0, 0, 0], u'colour_selected': [0, 170, 0], u'TWO': 0.613, u'ONE': 0.682, u'DIFFERENCE': 0.069, u'correct': u'ONE'}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
    Routine trial
    LoopInitiator trials_2 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = $runorskip
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      Routine explicit
    LoopTerminator trials_2
    Routine feedback
  LoopTerminator trials
  Routine end
